<?xml version='1.0' encoding='ASCII' ?>
<Velocity11 file='Protocol_Data' md5sum='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' version='2.0' >
	<File_Info AllowSimultaneousRun='1' AutoLoadRacks='When the main protocol starts' AutoUnloadRacks='0' Barcodes_Directory='' DeleteHitpickFiles='1' Description='' Device_File='C:\VWorks Workspace\Device Files\StandAloneBravo.dev' DynamicAssignPlateStorageLoad='0' FinishScript='' HandlePlatesInInstance='1' Notes='' PipettePlatesInInstanceOrder='1' Protocol_Alias='' StartScript='' Use_Global_JS_Context='0' />
	<Processes >
		<Startup_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::User Message' >
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					<Parameters >
						<Parameter Category='' Name='Title' Value='Don&apos;t be a dummy' />
						<Parameter Category='' Name='Body' Value='DNAvols2

This protocol is for DNAvols2. Make sure that current DNAvols2 file has been transferred over.

5: DNA tubes
6: 96 well labelling plate
8: Clean tips
9: Used tips' />
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					</Parameters>
				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='//Create the object file and print a line into the log file
var dnafilename = (&quot;g:\\dnavols2.csv&quot;)

input =new File()
input.Open(dnafilename)
var dnacontents =input.Read()
print(dnacontents)
dnavolumes =dnacontents.split(&quot;\n&quot;)

print (dnacontents)
print(dnavolumes [1])
' />
				</Task>
				<Task Name='BuiltIn::Configure Labware' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
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						<Parameter Category='' Name='8' Value='96 V11 LT250 Tip Box 19477.002' />
						<Parameter Category='' Name='9' Value='96 V11 LT250 Tip Box 19477.002' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='startup process - 1' />
				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
		</Startup_Processes>
		<Main_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='5' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='5' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Transfer DNA ' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Transfer DNA ' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='2ml tubes' />
					<Parameter Name='Plate type' Value='Guys 33 2ml tube rack 1' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='6' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='6' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Transfer DNA ' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Transfer DNA ' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='96 well plate ' />
					<Parameter Name='Plate type' Value='Guys 96 Eppendorf PP Rnd Well Cone Btm PCR' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Pipette_Process Name='Transfer DNA ' >
				<Minimized >0</Minimized>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;1&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;4&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='1' RowCount='1' SubsetConfig='0' SubsetType='4' />
					</PipetteHead>
				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='counter = 0



' />
				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='counter++' />
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='8' />
						<Parameter Category='' Name='Location, location' Value='8' />
						<Parameter Category='Properties' Name='Allow automatic tracking of tip usage' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;0&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;1&apos; RowCount=&apos;1&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;4&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;4&apos; Row=&apos;1&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='print(&quot;dnacounter&quot; +counter)
task.Volume = dnavolumes [counter]

' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='2ml tubes' />
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						<Parameter Category='Volume' Name='Pre-aspirate volume' Value='2' />
						<Parameter Category='Volume' Name='Post-aspirate volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='Guys QC Water 1-50ul' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='print(&quot;dispensecounter&quot; + counter)

' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='96 well plate ' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Empty tips' Value='1' />
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						<Parameter Category='Properties' Name='Liquid class' Value='Guys QC Water 1-50ul' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;2&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='9' />
						<Parameter Category='' Name='Location, location' Value='9' />
						<Parameter Category='Properties' Name='Allow automatic tracking of tip usage' Value='1' />
						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;7&apos; Row=&apos;6&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='counter++' />
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='8' />
						<Parameter Category='' Name='Location, location' Value='8' />
						<Parameter Category='Properties' Name='Allow automatic tracking of tip usage' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;5&apos; Row=&apos;1&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='print(&quot;dnacounter&quot; +counter)
task.Volume = dnavolumes [counter]

' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='2ml tubes' />
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						<Parameter Category='Volume' Name='Pre-aspirate volume' Value='2' />
						<Parameter Category='Volume' Name='Post-aspirate volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='Guys QC Water 1-50ul' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;1&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='print(&quot;dispensecounter&quot; + counter)

' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='96 well plate ' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Empty tips' Value='1' />
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						<Parameter Category='Properties' Name='Liquid class' Value='Guys QC Water 1-50ul' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;2&apos; Row=&apos;1&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='9' />
						<Parameter Category='' Name='Location, location' Value='9' />
						<Parameter Category='Properties' Name='Allow automatic tracking of tip usage' Value='1' />
						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;6&apos; Row=&apos;6&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='counter++' />
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='8' />
						<Parameter Category='' Name='Location, location' Value='8' />
						<Parameter Category='Properties' Name='Allow automatic tracking of tip usage' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;6&apos; Row=&apos;1&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='print(&quot;dnacounter&quot; +counter)
task.Volume = dnavolumes [counter]

' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='2ml tubes' />
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						<Parameter Category='Volume' Name='Pre-aspirate volume' Value='2' />
						<Parameter Category='Volume' Name='Post-aspirate volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='Guys QC Water 1-50ul' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;2&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='print(&quot;dispensecounter&quot; + counter)

' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='96 well plate ' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Empty tips' Value='1' />
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						<Parameter Category='Properties' Name='Liquid class' Value='Guys QC Water 1-50ul' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;2&apos; Row=&apos;2&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='9' />
						<Parameter Category='' Name='Location, location' Value='9' />
						<Parameter Category='Properties' Name='Allow automatic tracking of tip usage' Value='1' />
						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;5&apos; Row=&apos;6&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='counter++' />
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='8' />
						<Parameter Category='' Name='Location, location' Value='8' />
						<Parameter Category='Properties' Name='Allow automatic tracking of tip usage' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;7&apos; Row=&apos;1&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='print(&quot;dnacounter&quot; +counter)
task.Volume = dnavolumes [counter]

' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='2ml tubes' />
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						<Parameter Category='Volume' Name='Pre-aspirate volume' Value='2' />
						<Parameter Category='Volume' Name='Post-aspirate volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='Guys QC Water 1-50ul' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;3&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='print(&quot;dispensecounter&quot; + counter)

' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='96 well plate ' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Empty tips' Value='1' />
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						<Parameter Category='Properties' Name='Liquid class' Value='Guys QC Water 1-50ul' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;2&apos; Row=&apos;3&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='9' />
						<Parameter Category='' Name='Location, location' Value='9' />
						<Parameter Category='Properties' Name='Allow automatic tracking of tip usage' Value='1' />
						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;4&apos; Row=&apos;6&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='counter++' />
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='8' />
						<Parameter Category='' Name='Location, location' Value='8' />
						<Parameter Category='Properties' Name='Allow automatic tracking of tip usage' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;8&apos; Row=&apos;1&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='print(&quot;dnacounter&quot; +counter)
task.Volume = dnavolumes [counter]

' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='2ml tubes' />
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						<Parameter Category='Volume' Name='Pre-aspirate volume' Value='2' />
						<Parameter Category='Volume' Name='Post-aspirate volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='Guys QC Water 1-50ul' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;4&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='print(&quot;dispensecounter&quot; + counter)

' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='96 well plate ' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Empty tips' Value='1' />
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						<Parameter Category='Properties' Name='Liquid class' Value='Guys QC Water 1-50ul' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='2' />
						<Parameter Category='Properties' Name='Dynamic tip retraction' Value='0.2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;2&apos; Row=&apos;4&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='9' />
						<Parameter Category='' Name='Location, location' Value='9' />
						<Parameter Category='Properties' Name='Allow automatic tracking of tip usage' Value='1' />
						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;3&apos; Row=&apos;6&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='counter++' />
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='8' />
						<Parameter Category='' Name='Location, location' Value='8' />
						<Parameter Category='Properties' Name='Allow automatic tracking of tip usage' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;9&apos; Row=&apos;1&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='print(&quot;dnacounter&quot; +counter)
task.Volume = dnavolumes [counter]

' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='2ml tubes' />
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						<Parameter Category='Volume' Name='Pre-aspirate volume' Value='2' />
						<Parameter Category='Volume' Name='Post-aspirate volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='Guys QC Water 1-50ul' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;5&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='print(&quot;dispensecounter&quot; + counter)

' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='96 well plate ' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Empty tips' Value='1' />
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						<Parameter Category='Properties' Name='Liquid class' Value='Guys QC Water 1-50ul' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='2' />
						<Parameter Category='Properties' Name='Dynamic tip retraction' Value='0.2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;2&apos; Row=&apos;5&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='9' />
						<Parameter Category='' Name='Location, location' Value='9' />
						<Parameter Category='Properties' Name='Allow automatic tracking of tip usage' Value='1' />
						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;2&apos; Row=&apos;6&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='counter++' />
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='8' />
						<Parameter Category='' Name='Location, location' Value='8' />
						<Parameter Category='Properties' Name='Allow automatic tracking of tip usage' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;10&apos; Row=&apos;1&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='print(&quot;dnacounter&quot; +counter)
task.Volume = dnavolumes [counter]

' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='2ml tubes' />
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						<Parameter Category='Volume' Name='Pre-aspirate volume' Value='2' />
						<Parameter Category='Volume' Name='Post-aspirate volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='Guys QC Water 1-50ul' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;1&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='print(&quot;dispensecounter&quot; + counter)

' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='96 well plate ' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Empty tips' Value='1' />
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						<Parameter Category='Properties' Name='Liquid class' Value='Guys QC Water 1-50ul' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='2' />
						<Parameter Category='Properties' Name='Dynamic tip retraction' Value='0.2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;2&apos; Row=&apos;6&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='9' />
						<Parameter Category='' Name='Location, location' Value='9' />
						<Parameter Category='Properties' Name='Allow automatic tracking of tip usage' Value='1' />
						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;1&apos; Row=&apos;6&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='counter++' />
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='8' />
						<Parameter Category='' Name='Location, location' Value='8' />
						<Parameter Category='Properties' Name='Allow automatic tracking of tip usage' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;11&apos; Row=&apos;1&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='print(&quot;dnacounter&quot; +counter)
task.Volume = dnavolumes [counter]

' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='2ml tubes' />
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						<Parameter Category='Volume' Name='Pre-aspirate volume' Value='2' />
						<Parameter Category='Volume' Name='Post-aspirate volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='Guys QC Water 1-50ul' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;1&apos; Row=&apos;1&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='print(&quot;dispensecounter&quot; + counter)

' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='96 well plate ' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Empty tips' Value='1' />
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						<Parameter Category='Properties' Name='Liquid class' Value='Guys QC Water 1-50ul' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;2&apos; Row=&apos;7&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='9' />
						<Parameter Category='' Name='Location, location' Value='9' />
						<Parameter Category='Properties' Name='Allow automatic tracking of tip usage' Value='1' />
						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;6&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='counter++' />
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='8' />
						<Parameter Category='' Name='Location, location' Value='8' />
						<Parameter Category='Properties' Name='Allow automatic tracking of tip usage' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;2&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='print(&quot;dnacounter&quot; +counter)
task.Volume = dnavolumes [counter]

' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='2ml tubes' />
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						<Parameter Category='Volume' Name='Pre-aspirate volume' Value='2' />
						<Parameter Category='Volume' Name='Post-aspirate volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='Guys QC Water 1-50ul' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;2&apos; Row=&apos;1&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='print(&quot;dispensecounter&quot; + counter)

' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='96 well plate ' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Empty tips' Value='1' />
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						<Parameter Category='Properties' Name='Liquid class' Value='Guys QC Water 1-50ul' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;3&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
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				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='9' />
						<Parameter Category='' Name='Location, location' Value='9' />
						<Parameter Category='Properties' Name='Allow automatic tracking of tip usage' Value='1' />
						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;5&apos; Row=&apos;5&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::JavaScript' >
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					<TaskScript Name='TaskScript' Value='counter++' />
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='8' />
						<Parameter Category='' Name='Location, location' Value='8' />
						<Parameter Category='Properties' Name='Allow automatic tracking of tip usage' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;7&apos; Row=&apos;2&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<TaskScript Name='TaskScript' Value='print(&quot;dnacounter&quot; +counter)
task.Volume = dnavolumes [counter]

' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='2ml tubes' />
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						<Parameter Category='Volume' Name='Pre-aspirate volume' Value='2' />
						<Parameter Category='Volume' Name='Post-aspirate volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='Guys QC Water 1-50ul' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;3&apos; Row=&apos;2&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<TaskScript Name='TaskScript' Value='print(&quot;dispensecounter&quot; + counter)

' />
					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='96 well plate ' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Empty tips' Value='1' />
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						<Parameter Category='Properties' Name='Liquid class' Value='Guys QC Water 1-50ul' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0.2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;3&apos; Row=&apos;7&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='9' />
						<Parameter Category='' Name='Location, location' Value='9' />
						<Parameter Category='Properties' Name='Allow automatic tracking of tip usage' Value='1' />
						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;4&apos; Row=&apos;5&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::User Message' >
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					<Parameters >
						<Parameter Category='' Name='Title' Value='Don&apos;t be a dummy' />
						<Parameter Category='' Name='Body' Value='Take DNA tube rack from position 5

Place next DNA tube rack at position 5 and start next DNAvols programme

Recap used DNAs

Return used DNAs' />
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					</Parameters>
				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='Default Location' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
		</Main_Processes>
	</Processes>
</Velocity11>