<?xml version='1.0' encoding='ASCII' ?>
<Velocity11 file='Protocol_Data' md5sum='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' version='2.0' >
	<File_Info AllowSimultaneousRun='1' AutoLoadRacks='When the main protocol starts' AutoUnloadRacks='0' Barcodes_Directory='' DeleteHitpickFiles='1' Description='' Device_File='C:\VWorks Workspace\Device Files\StandAloneBravo.dev' DynamicAssignPlateStorageLoad='0' FinishScript='' HandlePlatesInInstance='1' Notes='' PipettePlatesInInstanceOrder='1' Protocol_Alias='' StartScript='' Use_Global_JS_Context='0' />
	<Processes >
		<Startup_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Configure Labware' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Display confirmation' Value='' />
						<Parameter Category='' Name='1' Value='96 V11 LT250 Tip Box 19477.002' />
						<Parameter Category='' Name='2' Value='' />
						<Parameter Category='' Name='3' Value='96 V11 LT250 Tip Box 19477.002' />
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					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='startup process - 1' />
				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
		</Startup_Processes>
		<Main_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='4' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='4' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Bravo SubProcess 5' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Bravo SubProcess 5' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Polymerase enzyme' />
					<Parameter Name='Plate type' Value='Guys 96 Eppendorf PP Rnd Well Cone Btm PCR' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Place Plate' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='6' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Location to use' Value='6' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Bravo SubProcess 5' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Bravo SubProcess 5' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='DNA &amp; Primers' />
					<Parameter Name='Plate type' Value='Guys 96 Eppendorf PP Rnd Well Cone Btm PCR' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Pipette_Process Name='Bravo SubProcess 5' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::User Message' >
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					<Parameters >
						<Parameter Category='' Name='Title' Value='Don&apos;t be a dummy' />
						<Parameter Category='' Name='Body' Value='Add Polymerase enzyme to DNA &amp; primers

1: Tip rack - full of clean tips
3: Tip rack - empty
4: Polymerase enzyme plate (yellow sticker; spun down)
6: DNA &amp; Primers plate (spun down)' />
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					</Parameters>
				</Task>
				<Task Name='Bravo::secondary::Set Head Mode' Task_Type='512' >
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					<Parameters >
						<Parameter Category='' Name='Head mode' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; /&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
					<PipetteHead Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='1' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='Polymerase enzyme' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' Value='10' />
						<Parameter Category='Volume' Name='Pre-aspirate volume' Value='10' />
						<Parameter Category='Volume' Name='Post-aspirate volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='Guys QC Water 1-50ul' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='1' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='DNA &amp; Primers' />
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						<Parameter Category='Volume' Name='Volume' Value='10' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='Guys QC Water 1-50ul' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='DNA &amp; Primers' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' Value='42' />
						<Parameter Category='Volume' Name='Pre-aspirate volume' Value='' />
						<Parameter Category='Volume' Name='Blowout volume' Value='10' />
						<Parameter Category='Properties' Name='Liquid class' Value='Guys QC Water 50-100ul' />
						<Parameter Category='Properties' Name='Mix cycles' Value='10' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='0' />
						<Parameter Category='Distance From Well Bottom' Name='Aspirate distance' Value='2' />
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						<Parameter Category='Tip Touch' Name='Perform tip touch' Value='1' />
						<Parameter Category='Tip Touch' Name='Which sides to use for tip touch' Value='North' />
						<Parameter Category='Tip Touch' Name='Tip touch retract distance' Value='8' />
						<Parameter Category='Tip Touch' Name='Tip touch horizontal offset' Value='0' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
						<Parameter Category='Properties' Name='Pipette technique' Value='' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='3' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::User Message' >
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					<Parameters >
						<Parameter Category='' Name='Title' Value='Don&apos;t be a dummy' />
						<Parameter Category='' Name='Body' Value='Take plate from position 6
Seal plate using a clear seal
Quick spin
Place back into in PCR machine (onto 37C overnight)
' />
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					</Parameters>
				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='1' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
		</Main_Processes>
	</Processes>
</Velocity11>